[General settings]
name: SQE_VIRTUAL_CombResponse
version: 1.1
driver_path: SQE_VIRTUAL_CombResponse
signal_generator: True

[Start frequency]
datatype: DOUBLE
permission: READ
group: X-axis
def_value: 100e6
unit: Hz

[Stop frequency]
datatype: DOUBLE
permission: READ
group: X-axis
def_value: 12e9
unit: Hz

[Number of points]
datatype: DOUBLE
def_value: 2001
group: X-axis

[Pump frequency]
datatype: DOUBLE
def_value: 800e6
unit: Hz
group: Comb
tooltip: Pump frequency f_p

[Min order]
datatype: DOUBLE
def_value: 1
group: Comb
tooltip: Minimum harmonic order n_min (>= 1)

[Max order]
datatype: DOUBLE
def_value: 10
group: Comb
tooltip: Maximum harmonic order n_max (>= n_min)

[Linewidth]
datatype: DOUBLE
def_value: 5e6
unit: Hz
group: Comb
tooltip: Approximate FWHM of each line in frequency domain

[Amplitude envelope]
datatype: COMBO
combo_def_1: Power law
combo_def_2: Gaussian in n
combo_def_3: Custom
def_value: Power law
group: Comb

[Power-law exponent]
datatype: DOUBLE
def_value: 1.0
group: Comb
state_quant: Amplitude envelope
state_value_1: Power law
tooltip: Amplitude ~ 1 / n^alpha

[Gaussian width in n]
datatype: DOUBLE
def_value: 2.0
group: Comb
state_quant: Amplitude envelope
state_value_1: Gaussian in n
tooltip: Sigma in harmonic index n, centered at n=1

[Custom amplitudes]
datatype: STRING
def_value: 1,0.7,0.5,0.35,0.25
group: Comb
state_quant: Amplitude envelope
state_value_1: Custom
tooltip: Comma-separated amplitudes for n = n_min ... n_max (normalized, pad/crop if needed)

[Global phase]
datatype: DOUBLE
def_value: 0
unit: rad
group: Comb

[Add noise]
datatype: BOOLEAN
def_value: False
group: Additional options

[Magnitude noise]
datatype: DOUBLE
def_value: 0.05
state_quant: Add noise
state_value_1: True
group: Additional options

[Phase noise]
datatype: DOUBLE
def_value: 0
unit: rad/pi
state_quant: Add noise
state_value_1: True
group: Additional options

[Gain]
datatype: DOUBLE
def_value: 1
group: Additional options

[Offset]
datatype: DOUBLE
def_value: 0
group: Additional options

; ---------- Time-domain settings for QCS-like trace ----------

[Sample rate]
datatype: DOUBLE
def_value: 1e9
unit: Hz
group: Time domain
tooltip: Sampling rate for the time trace

[Number of time points]
datatype: DOUBLE
def_value: 2001
group: Time domain
tooltip: Number of samples in the time trace

[Time trace]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
unit: V
group: Time domain
show_in_measurement_dlg: True

; ---------- Frequency-domain outputs ----------

[Spectrum]
datatype: VECTOR_COMPLEX
permission: READ
x_name: Frequency
x_unit: Hz
unit: a.u.          ; add this if you want
show_in_measurement_dlg: True

[Spectrum (dBm)]
datatype: VECTOR
permission: READ
x_name: Frequency
x_unit: Hz
unit: dBm
show_in_measurement_dlg: True